PsychoPy2experiment version="1.90.2"
Settings
  expName = 2018.06.15_サイモン効果
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    PolygonComponent stimulus
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      units = pix
      pos = (400, 0)
      size = (100, 100)
      nVertices = 40
      shape = regular polygon...
      fillColor = $[1.000,-1.000,-1.000,1.000]
      lineColor = $[1.000,1.000,1.000,1.000]
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    PolygonComponent cross1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      size = (5, 50)
      shape = rectangle
      fillColor = $[1,1,1]
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    PolygonComponent closs2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      size = (5, 50)
      ori = 90
      shape = rectangle
      fillColor = $[1,1,1]
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Flow
  Routine trial
